---
API: 2.1
OpenSesame: 3.3.8
Platform: posix
---
set width 1366
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start bissec_temp
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/marcelarruda/Documents/OpenSesame"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad bemvindo
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Bem vindo a Tarefa de bissecção temporal!<br /><br />Nessa tarefa, responda 'Q' quando o tempo do estímulo for curto.<br /><br />Responda 'P' quando o tempo do estímulo for longo.<br /><br /><br />Tecla Q = Curto<br />Tecla P = Longo" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Estímulo =" x=-96 y=224 z_index=0
	draw rect color=white fill=1 h=128 penwidth=1 show_if=always w=128 x=32 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="Pessione qualquer tecla para continuar." x=0 y=352 z_index=0

define sequence bissec_temp
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run bemvindo always
	run new_sketchpad_6 always
	run loop_curto always
	run new_feedback_2 always
	run loop_long always
	run new_feedback_3 always
	run loop_simples always
	run pausa always
	run loop_log_1 always
	run fim_log always

define sketchpad espera
	set duration 200
	set description "Displays stimuli"

define sketchpad espera0
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad espera0_log
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad espera_curto
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'Q' para estes estímulos curtos" x=0 y=-352 z_index=0

define sketchpad espera_long
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'P' para estes estímulos longos" x=0 y=-352 z_index=0

define sketchpad estimulo
	set duration "[tempo]"
	set description "Displays stimuli"
	draw rect color=white fill=1 h=288 penwidth=1 show_if=always w=320 x=-160 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad estimulo_curto
	set duration "[tempo]"
	set description "Displays stimuli"
	draw rect color=white fill=1 h=288 penwidth=1 show_if=always w=320 x=-160 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'Q' para estes estímulos curtos" x=0 y=-352 z_index=0

define sketchpad estimulo_log
	set duration "[tempo_log]"
	set description "Displays stimuli"
	draw rect color=white fill=1 h=288 penwidth=1 show_if=always w=320 x=-160 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad estimulo_long
	set duration "[tempo]"
	set description "Displays stimuli"
	draw rect color=white fill=1 h=288 penwidth=1 show_if=always w=320 x=-160 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'P' para estes estímulos longos" x=0 y=-352 z_index=0

define sketchpad fim_log
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Obrigado!<br />Pressione qualquer tecla." x=0 y=0 z_index=0

define sketchpad fim_simples
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Obrigado!" x=0 y=0 z_index=0

define sketchpad fix
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad fix_curto
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'Q' para estes estímulos curtos" x=0 y=-352 z_index=0

define sketchpad fix_log
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'Q' = Curto" x=-416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="'P' = Longo" x=416 y=-352 z_index=0

define sketchpad fix_long
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Responda 'P' para estes estímulos longos" x=0 y=-352 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop loop_curto
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 tempo 500
	setcycle 0 congruencia curto
	setcycle 0 resp_corr q
	run seq_curto

define loop loop_log
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 7
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 tempo_log 1000
	setcycle 0 resp_corr_log q
	setcycle 1 tempo_log 1260
	setcycle 1 resp_corr_log q
	setcycle 2 tempo_log 1550
	setcycle 2 resp_corr_log q
	setcycle 3 tempo_log 2000
	setcycle 3 resp_corr_log q
	setcycle 4 tempo_log 2520
	setcycle 4 resp_corr_log p
	setcycle 5 tempo_log 3170
	setcycle 5 resp_corr_log p
	setcycle 6 tempo_log 4000
	setcycle 6 resp_corr_log p
	run seq_log

define loop loop_log_1
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 7
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 tempo_log 500
	setcycle 0 resp_corr_log q
	setcycle 1 tempo_log 630
	setcycle 1 resp_corr_log q
	setcycle 2 tempo_log 793.5
	setcycle 2 resp_corr_log q
	setcycle 3 tempo_log 1000
	setcycle 3 resp_corr_log q
	setcycle 4 tempo_log 1260
	setcycle 4 resp_corr_log p
	setcycle 5 tempo_log 1587
	setcycle 5 resp_corr_log p
	setcycle 6 tempo_log 2000
	setcycle 6 resp_corr_log p
	run seq_log_1

define loop loop_long
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 tempo 2000
	setcycle 0 congruencia longo
	setcycle 0 resp_corr p
	run seq_long

define loop loop_simples
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if "[total_correct] = 10"
	setcycle 0 tempo 500
	setcycle 0 congruencia curto
	setcycle 0 resp_corr q
	setcycle 1 tempo 2000
	setcycle 1 congruencia longo
	setcycle 1 resp_corr p
	run seq_simples

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define feedback new_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Pausa entre sessões." x=0 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Muito bem! <br /><br />Agora, responda 'P' para os 5 estímulos longos apresentados." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="Pessione qualquer tecla para iniciar." x=0 y=352 z_index=0

define feedback new_feedback_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Pausa entre sessões." x=0 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Muito bem! <br /><br />Agora, responda 'Q' para os estímulos curtos e 'P' para os longos.<br /><br />Ambos serão apresentados aleatoriamente." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="Pessione qualquer tecla para iniciar." x=0 y=352 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "mixkit-tribal-dry-drum-558.wav"
	set pitch 0.9
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_1
	set volume 1
	set stop_after 0
	set sample "mixkit-tribal-dry-drum-558.wav"
	set pitch 0.9
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_2
	set volume 1
	set stop_after 0
	set sample "mixkit-tribal-dry-drum-558.wav"
	set pitch 0.9
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_3
	set volume 1
	set stop_after 0
	set sample "mixkit-tribal-dry-drum-558.wav"
	set pitch 0.9
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw rect color=white fill=0 h=320 penwidth=1 show_if=always w=352 x=-192 y=-160 z_index=0
	draw gabor bgmode=avg color1=white color2=black env=gaussian freq=0.1 orient=0 phase=0 show_if=always size=96 stdev=12 x=0 y=0 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_3
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_6
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="A seguir vamos nos familiarizar com os estímulos e suas durações!<br /><br />Primeiro, responda 'Q' para os 5 estímulos curtos apresentados." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="Pessione qualquer tecla para iniciar." x=0 y=352 z_index=0

define feedback pausa
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Pausa entre sessões." x=0 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Ótimo! <br /><br />Agora, continue a  responder 'Q' para os estímulos curtos e 'P' para os longos.<br /><br />Serão apresentados estímulos intermediários. <br /><br />Julgue os estímulos, avaliando-os entre curtos 'Q' e longos 'P'." x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="Pessione qualquer tecla para iniciar." x=0 y=352 z_index=0

define feedback pausa2
	set reset_variables yes
	set duration 200
	set description "Provides feedback to the participant"

define keyboard_response resp_log
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[resp_corr_log]"
	set allowed_responses "q; p"

define keyboard_response resposta_curto
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[resp_corr]"
	set allowed_responses q

define keyboard_response resposta_long
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[resp_corr]"
	set allowed_responses p

define keyboard_response resposta_simples
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[resp_corr]"
	set allowed_responses "q; p"

define logger save
	set description "Logs experimental data"
	set auto_log yes

define logger save2
	set description "Logs experimental data"
	set auto_log yes

define sequence seq_curto
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix_curto always
	run estimulo_curto always
	run espera_curto always
	run resposta_curto always
	run new_sampler_2 always
	run new_logger always

define sequence seq_log
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix_log always
	run estimulo_log always
	run espera0_log always
	run resp_log always
	run save2 always

define sequence seq_log_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback always
	run fix_log always
	run estimulo_log always
	run espera0_log always
	run resp_log always
	run new_sampler_1 always
	run save2 always

define sequence seq_long
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix_long always
	run estimulo_long always
	run espera_long always
	run resposta_long always
	run new_sampler_3 always
	run new_logger_1 always

define sequence seq_simples
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix always
	run estimulo always
	run espera0 always
	run resposta_simples always
	run new_sampler always
	run save always

